PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent arrow
      letterHeight = 0.05
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 0.8
      text = <
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    KeyboardComponent resp
      allowedKeys = 'a', 'l'
      forceEndRoutine = True
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 1.8
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:2
    loopType = random
    nReps = 50
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    Routine trial
  LoopTerminator trials
